CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.c']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "orig")
    Name to assign these images:Original
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "violet_mask")
    Name to assign these images:Violet_mask
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "green_mask")
    Name to assign these images:Green_mask
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "red_mask")
    Name to assign these images:Red_mask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Original
    Conversion method:Split
    Image type:Channels
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    Channel count:1
    Channel number:1
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    Image name:Cells

Smooth:[module_num:6|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enabled:False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
    Select the input image:Necrosis
    Name the output image:Necrosis_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:Yes
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
Smooth:[module_num:7|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enabled:False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
    Select the input image:Cells
    Name the output image:Cells_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:Yes
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
Smooth:[module_num:8|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enabled:False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
    Select the input image:Apoptosis
    Name the output image:Apoptosis_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:Yes
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Violet_mask
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):15,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Green_mask
    Name the primary objects to be identified:Apoptotic
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:11|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notes:['Here manual thershold because ol low intensity of necrotic cells and high intensity of membrane itself']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
    Select the input image:Red_mask
    Name the primary objects to be identified:Necrotic
    Typical diameter of objects, in pixel units (Min,Max):15,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RelateObjects:[module_num:12|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
    Parent objects:Apoptotic
    Child objects:Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Apoptotic_Cells
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
RelateObjects:[module_num:13|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
    Parent objects:Necrotic
    Child objects:Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Necrotic_Cells
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
RelateObjects:[module_num:14|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
    Parent objects:Apoptotic
    Child objects:Necrotic
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Necrotic_Apoptotic
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
RelateObjects:[module_num:15|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
    Parent objects:Necrotic_Apoptotic
    Child objects:Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Necrotic_Apoptotic_Cells
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
OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cells
    Name the output image:Cells_Outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FF00E6
    Select objects to display:Cells

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cells
    Name the output image:NA_Outlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Necrotic_Apoptotic_Cells

OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cells
    Name the output image:Apoptotic_Outlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00FF40
    Select objects to display:Apoptotic_Cells

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cells
    Name the output image:Necrotic_outlies
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:yellow
    Select objects to display:Necrotic_Cells

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:Cells_Outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Cells
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop\\Thesis big files\\23-12-2022 Vero on Matrixes\\Counted images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:Apoptotic_Outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Apoptotic
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop\\Thesis big files\\23-12-2022 Vero on Matrixes\\Counted images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:NA_Outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:NA
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop\\Thesis big files\\23-12-2022 Vero on Matrixes\\Counted images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:Necrotic_outlies
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Necrotic
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop\\Thesis big files\\23-12-2022 Vero on Matrixes\\Counted images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Necrotic_Apoptotic_Cells|Number_Object_Number,Necrotic_Apoptotic_Cells|Location_Center_Z,Necrotic_Apoptotic_Cells|Location_Center_X,Necrotic_Apoptotic_Cells|Location_Center_Y,Apoptotic_Cells|Number_Object_Number,Apoptotic_Cells|Location_Center_Y,Apoptotic_Cells|Location_Center_X,Apoptotic_Cells|Location_Center_Z,Necrotic_Cells|Location_Center_X,Necrotic_Cells|Location_Center_Y,Necrotic_Cells|Location_Center_Z,Necrotic_Cells|Parent_Cells,Necrotic_Cells|Number_Object_Number,Cells|Children_Necrotic_Cells_Count,Cells|Children_Apoptotic_Cells_Count,Cells|Location_Center_Y,Cells|Location_Center_X,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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