CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file doesnot contain "Simple Segmentation") (file doesnot contain "Probabilities")
    Name to assign these images:Original
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Probabilities")
    Name to assign these images:Prop
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Original
    Conversion method:Combine
    Image type:RGB
    Name the output image:Grayscale
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:6|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
    Select the input image:Prop
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:Spheroids_Prob
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ImageMath:[module_num:7|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Grayscale
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Smooth:[module_num:8|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
    Select the input image:Spheroids_Prob
    Name the output image:Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:Yes
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
Threshold:[module_num:9|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
    Select the input image:Smooth
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Threshold
    Name the primary objects to be identified:Spheroids_unfiltered
    Typical diameter of objects, in pixel units (Min,Max):200,700
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:Spheroids_unfiltered
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

FilterObjects:[module_num:12|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
    Select the objects to filter:Spheroids_unfiltered
    Name the output objects:Shperoids_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:Shperoids_filtered
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:14|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
    Select images to measure:Grayscale
    Select objects to measure:Shperoids_filtered

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Original
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Shperoids_filtered

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Shperoids_filtered|Intensity_MinIntensityEdge_Grayscale,Shperoids_filtered|Intensity_MADIntensity_Grayscale,Shperoids_filtered|Intensity_MinIntensity_Grayscale,Shperoids_filtered|Intensity_UpperQuartileIntensity_Grayscale,Shperoids_filtered|Intensity_MeanIntensity_Grayscale,Shperoids_filtered|Intensity_MaxIntensityEdge_Grayscale,Shperoids_filtered|Intensity_StdIntensity_Grayscale,Shperoids_filtered|Intensity_MaxIntensity_Grayscale,Shperoids_filtered|Intensity_StdIntensityEdge_Grayscale,Shperoids_filtered|Intensity_MeanIntensityEdge_Grayscale,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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